PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = beads_task_DtD_norm_wb
  Screen = 1
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Routines
  Routine end_of_task
    TextComponent text_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you!
        End of task
  Routine next
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Get ready!
        Press SPACE to continue
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial_1
    ImageComponent current_bead
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press the blue key for 85% blue
        Press the yellow key for 85% yellow
        Press SPACE to see another bead
    ImageComponent image
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = jars.jpg
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    TextComponent text
      text = 85:15
      stopVal [duration (s)] = 120
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent code
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_4
    ImageComponent current_bead_4
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_4
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press the blue key for 60% blue
        Press the yellow key for 60% yellow
        Press SPACE to see another bead
    ImageComponent image_4
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = jars_6040.jpg
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    TextComponent ratio_3
      text = 60:40
      stopVal [duration (s)] = 120
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end_3
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_4.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_5
    ImageComponent current_bead_5
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_5
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press 1 for 85:15
        Press 2 for 50:50
        Press SPACE to see another bead
    ImageComponent image_5
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = jars_50508020b.jpg
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    TextComponent ratio_4
      stopVal [duration (s)] = 120
      pos = (-0.5,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Left jar: 85:15
        Right jar: 50:50
    CodeComponent end_4
      Each Frame:
        if event.getKeys(keyList=['1', '2']):
          trials_5.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_6
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = '1','2','space'
      startVal [time (s)] = 0
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  Routine trial_2
    ImageComponent current_bead_2
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_2
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press the blue key for 85% blue
        Press the yellow key for 85% yellow
        Press SPACE to see another bead
    ImageComponent image_2
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = jars.jpg
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    TextComponent ratio
      text = 85:15
      stopVal [duration (s)] = 120
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_2.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_3
    ImageComponent current_bead_3
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_3
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press the blue key for 60% blue
        Press the yellow key for 60% yellow
        Press SPACE to see another bead
    ImageComponent image_3
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = jars_6040.jpg
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    TextComponent ratio_2
      text = 60:40
      stopVal [duration (s)] = 120
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end_2
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_3.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine instructions
    TextComponent b_instructions_2_
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        You will be presented with two jars, containing blue and yellow beads.
        You will be told the ratio of blue-to-yellow beads in each jar.
        Beads will be drawn at random from one of the two jars, and then replaced by another bead of the same colour.
        This means that the total number of beads remains the same, as does the colour ratio.

        Your task is to figure out which jar the beads are being drawn from.
        You can request to see as many beads as you like by pressing SPACE.
        Make a decision only once you feel you have enough information to do so.
        You can decide by pressing the yellow key for the jar containing mostly yellow beads and the blue key for the jar with mostly blue beads.

        The colour ratios will change between trials, so it is important that you check all the information on the screen on each trial.

        When you are ready, press SPACE to start.

        Good luck!
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq1_8515_1.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_2.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_3.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_4.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_5.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_6.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_7.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_8.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_9.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_10.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_11.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_12.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_13.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_14.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_15.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_16.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_17.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_18.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_19.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_20.jpg')])]
    Routine trial_1
  LoopTerminator trials
  Routine next
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq3_8515_1.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_2.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_3.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_4.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_5.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_6.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_7.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_8.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_9.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_10.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_11.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_12.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_13.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_14.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_15.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_16.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_17.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_18.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_19.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_20.jpg')])]
    Routine trial_2
  LoopTerminator trials_2
  Routine next
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq1_6040_1.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_2.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_3.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_4.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_5.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_6.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_7.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_8.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_9.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_10.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_11.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_12.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_13.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_14.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_15.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_16.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_17.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_18.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_19.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_20.jpg')])]
    Routine trial_3
  LoopTerminator trials_3
  Routine next
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq3_6040_1.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_2.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_3.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_4.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_5.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_6.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_7.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_8.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_9.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_10.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_11.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_12.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_13.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_14.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_15.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_16.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_17.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_18.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_19.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_20.jpg')])]
    Routine trial_4
  LoopTerminator trials_4
  Routine next
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq4_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq4_8515_1.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_2.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_3.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_4.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_5.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_6.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_7.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_8.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_9.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_10.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_11.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_12.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_13.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_14.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_15.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_16.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_17.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_18.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_19.jpg')]),
      OrderedDict([('SequenceName', u'seq4_8515_20.jpg')])]
    Routine trial_5
  LoopTerminator trials_5
  Routine end_of_task
